OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Basic P300 3/4
0xf36a1567 = http://openvibe.inria.fr/openvibe-p300-speller/
0xf8034a49 = Inria

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "Cz;O1;O2"
  Channel List = Cz;O1;O2
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation => #3
  Decimation factor = 4
Button VRPN Client => #4
  Peripheral name = button_test@localhost:50555
  Button 1 ON = OVTK_StimulationId_Number_01
  Button 1 OFF = OVTK_StimulationId_Number_00
  Button 2 ON = OVTK_StimulationId_Number_01
  Button 2 OFF = OVTK_StimulationId_Number_00
  Button 3 ON = OVTK_StimulationId_Number_01
  Button 3 OFF = OVTK_StimulationId_Number_00
  Button 4 ON = OVTK_StimulationId_Number_01
  Button 4 OFF = OVTK_StimulationId_Number_00
Input signal=#3, Input stimulations=#4.Output 1 -> Stimulation based epoching
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Number_01
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #7
Features=#7 -> Classifier processor => #8
  Filename to load configuration from = ${Player_ScenarioDirectory}/p300-classifier.cfg
Input signal=#3, Input stimulations=#4.Output 2 -> Stimulation based epoching
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Number_01
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #11
Features=#11 -> Classifier processor => #12
  Filename to load configuration from = ${Player_ScenarioDirectory}/p300-classifier.cfg
Input signal=#3, Input stimulations=#4.Output 3 -> Stimulation based epoching
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Number_01
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #15
Features=#15 -> Classifier processor => #16
  Filename to load configuration from = ${Player_ScenarioDirectory}/p300-classifier.cfg
Input signal=#3, Input stimulations=#4.Output 4 -> Stimulation based epoching
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Number_01
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #19
Features=#19 -> Classifier processor => #20
  Filename to load configuration from = ${Player_ScenarioDirectory}/p300-classifier.cfg
Classification result 0=#8.Labels, Classification result 1=#12.Labels, Classification result 2=#16.Labels, Classification result 3=#20.Labels -> Voting Classifier => #21
  Number of repetitions = 40
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_01
  Choose one if ex-aequo = false
Input 1=#21, Input 2=#21, Input 3=#21, Input 4=#21 -> Button VRPN Server
  Peripheral name = button_recognition@localhost:50556
  Button 1 ON = OVTK_StimulationId_Label_01
  Button 1 OFF = OVTK_StimulationId_TrialStop
  Button 2 ON = OVTK_StimulationId_Label_02
  Button 2 OFF = OVTK_StimulationId_TrialStop
  Button 3 ON = OVTK_StimulationId_Label_03
  Button 3 OFF = OVTK_StimulationId_TrialStop
  Button 4 ON = OVTK_StimulationId_Label_04
  Button 4 OFF = OVTK_StimulationId_TrialStop
