OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation => #2
  Decimation factor = 4
0xc73e83ec Button VRPN Client => #3
  Peripheral name = button_test@localhost:50555
  Button 1 ON = OVTK_StimulationId_Number_01
  Button 1 OFF = OVTK_StimulationId_Number_00
  Button 2 ON = OVTK_StimulationId_Number_01
  Button 2 OFF = OVTK_StimulationId_Number_00
  Button 3 ON = OVTK_StimulationId_Number_01
  Button 3 OFF = OVTK_StimulationId_Number_00
  Button 4 ON = OVTK_StimulationId_Number_01
  Button 4 OFF = OVTK_StimulationId_Number_00
Input signal=#2, Input stimulations=#3.Output 1 -> Stimulation based epoching
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_StimulationId_Label_00
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #6
Input signal=#2, Input stimulations=#3.Output 2 -> Stimulation based epoching
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_StimulationId_Label_00
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #9
Input signal=#2, Input stimulations=#3.Output 3 -> Stimulation based epoching
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_StimulationId_Label_00
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #12
Input signal=#2, Input stimulations=#3.Output 4 -> Stimulation based epoching
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_StimulationId_Label_00
-> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #15
Features for class 1=#6, Features for class 2=#9, Features for class 3=#12, Features for class 4=#15 -> Classifier trainer => #16
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/p300-classifier.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  Class 3 label = OVTK_StimulationId_NonTarget
  Class 4 label = OVTK_StimulationId_NonTarget
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
Input stream 1=#16 -> Identity "python_code" => #17
#17.Output stream 1 -> Button VRPN Server
  Peripheral name = openvibe-vrpn
  Button 1 ON = OVTK_GDF_Feedback_Continuous
  Button 1 OFF = OVTK_GDF_End_Of_Trial
Data=#17.Output stream 2, Stimulations=#17.Output stream 1 -> Signal display "LDA_Result"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input 1=#3.Output 1, Input 2=#3.Output 2, Input 3=#3.Output 3, Input 4=#3.Output 4 -> 0xc73e83ec Button VRPN Server
  Peripheral name = button_recognition@localhost:50555
  Button 1 ON = OVTK_StimulationId_Number_01
  Button 1 OFF = OVTK_StimulationId_Number_00
  Button 2 ON = OVTK_StimulationId_Number_01
  Button 2 OFF = OVTK_StimulationId_Number_00
  Button 3 ON = OVTK_StimulationId_Number_01
  Button 3 OFF = OVTK_StimulationId_Number_00
  Button 4 ON = OVTK_StimulationId_Number_01
  Button 4 OFF = OVTK_StimulationId_Number_00
